CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:ColorImage
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ColorImage
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:TCF7
    Channel number:Green: 2
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    Image name:CD8
    Channel number:Blue: 3
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    Image name:DAPI

EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:DAPI
    Name the output image:FilteredDAPI
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast / hexagonal

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:FilteredDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
RescaleIntensity:[module_num:8|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
    Select the input image:CD8
    Name the output image:RescaledCD8
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:RescaledCD8
    Select objects to measure:Nuclei

FilterObjects:[module_num:10|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
    Name the output objects:CD8PosNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensityEdge_RescaledCD8
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:TCF7
    Name the primary objects to be identified:TCF7Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MaskObjects:[module_num:12|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
    Select objects to be masked:CD8PosNuclei
    Name the masked objects:TCF7PosCD8PosNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:TCF7Nuclei
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

CalculateMath:[module_num:13|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
    Name the output measurement:Count_CD8Pos_TCFNeg
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Count_CD8PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Count_TCF7PosCD8PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#F8FF2D
    Load outlines from an image or objects?:Objects
    Select objects to display:CD8PosNuclei
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    Select outline color:#F1F7F7
    Load outlines from an image or objects?:Objects
    Select objects to display:TCF7PosCD8PosNuclei

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:ColorImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_TCF7Nuclei,Image|Count_Nuclei,Image|Count_CD8PosNuclei,Image|Count_TCF7PosCD8PosNuclei,Image|Math_Count_CD8Pos_TCFNeg
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
